// ============================================================
// 2cells_NetStim_BallStick4_naxkdr_dend.hoc
// VERSION DENDRITICA: sinapsis excitatoria colocada en una
// dendrita (SYN_LOC, SYN_POS configurables). La inhibicion
// sigue siendo perisomatica (en el soma cruzada entre celulas).
// ============================================================
load_file("nrngui.hoc")

// ============================================================
// ESTRUCTURA: soma[0..1] + 4 dendritas pasivas por cada soma
// ============================================================
create soma[2]
create dend_0_0, dend_0_1, dend_0_2, dend_0_3
create dend_1_0, dend_1_1, dend_1_2, dend_1_3

soma[0]  { pt3dclear()  pt3dadd(-17.5,0,0,5)  pt3dadd(-12.5,0,0,5) }
soma[1]  { pt3dclear()  pt3dadd(-2.5,0,0,5)   pt3dadd(2.5,0,0,5)   }
dend_0_0 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }
dend_0_1 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }
dend_0_2 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }
dend_0_3 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }
dend_1_0 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }
dend_1_1 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }
dend_1_2 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }
dend_1_3 { L=100  diam=1.5  nseg=5  Ra=100  cm=1 }

connect dend_0_0(0), soma[0](0.5)
connect dend_0_1(0), soma[0](0.5)
connect dend_0_2(0), soma[0](0.5)
connect dend_0_3(0), soma[0](0.5)
connect dend_1_0(0), soma[1](0.5)
connect dend_1_1(0), soma[1](0.5)
connect dend_1_2(0), soma[1](0.5)
connect dend_1_3(0), soma[1](0.5)

// ============================================================
// Canales
// ============================================================
forall insert pas
forall insert kdr
forall insert nax
forall g_pas       = 0.0001
forall e_pas       = -65
forall ena         = 55
forall ek          = -90
forall gbar_nax    = 0.04
forall gkdrbar_kdr = 0.04
celsius = 34
PI      = 3.14159265358979

// ============================================================
// PARAMETROS GLOBALES
// ============================================================
ws       = 0.0010
wi       = 6e-5
FreqInp  = 50
iampfact = 1
delay    = 20
Idel     = 0
N        = 2
t_therm  = 4000

// ============================================================
// LOCALIZACION DE LA SINAPSIS EXCITATORIA (NUEVO)
// SYN_LOC: 0=soma, 1..4 = dend_X_0..dend_X_3
// SYN_POS: posicion a lo largo de la dendrita (0..1)
// ============================================================
SYN_LOC = 1
SYN_POS = 0.5

// ============================================================
// Archivo de voltaje (usado por advance)
// ============================================================
objref fv
fv = new File()

// ============================================================
// Objetos de simulacion
// ============================================================
objref syni[2], nci[2], ic[2]
objref synA[2], ncA[2], ns
objref phi[2], corr_out
objref ispk, tspkprec, tspknext, ph
objref spike_times[2], spike_rec[2], vvec[2], tvec
objref nullobj
strdef new_file

// ============================================================
// NETSTIM compartido (UNICO, igual que en el simple)
// ============================================================
ns          = new NetStim(0.5)
ns.number   = 1000000
ns.interval = 1000/FreqInp
ns.start    = 10
ns.noise    = 0

// ============================================================
// make_synA(cell, loc, pos)
// Crea synA[cell] (Exp2Syn) en soma o dendrita
// ============================================================
proc make_synA() { local cell, loc, pos
    cell = $1
    loc  = $2
    pos  = $3
    if (cell == 0) {
        if (loc == 0) { soma[0]  { synA[0] = new Exp2Syn(pos) } }
        if (loc == 1) { dend_0_0 { synA[0] = new Exp2Syn(pos) } }
        if (loc == 2) { dend_0_1 { synA[0] = new Exp2Syn(pos) } }
        if (loc == 3) { dend_0_2 { synA[0] = new Exp2Syn(pos) } }
        if (loc == 4) { dend_0_3 { synA[0] = new Exp2Syn(pos) } }
    } else {
        if (loc == 0) { soma[1]  { synA[1] = new Exp2Syn(pos) } }
        if (loc == 1) { dend_1_0 { synA[1] = new Exp2Syn(pos) } }
        if (loc == 2) { dend_1_1 { synA[1] = new Exp2Syn(pos) } }
        if (loc == 3) { dend_1_2 { synA[1] = new Exp2Syn(pos) } }
        if (loc == 4) { dend_1_3 { synA[1] = new Exp2Syn(pos) } }
    }
    synA[cell].tau1 = 0.5
    synA[cell].tau2 = 10
    synA[cell].e    = 0
}

// ============================================================
// INICIALIZACION DE SOMAS
// ============================================================
// Sinapsis inhibitoria perisomatica + IClamp dummy + spike detector
for k = 0, 1 {
    soma[k] {
        syni[k]     = new ExpSyn(0.5)
        syni[k].tau = 30
        syni[k].e   = -80
        ic[k]       = new IClamp(0.5)
        ic[k].amp   = 0
        ic[k].dur   = 0
        ic[k].del   = 0
        spike_times[k] = new Vector()
        spike_rec[k]   = new NetCon(&v(0.5), nullobj, 0, 0, 0)
        spike_rec[k].record(spike_times[k])
    }
}

// Sinapsis excitatoria en DENDRITA elegida por SYN_LOC
make_synA(0, SYN_LOC, SYN_POS)
make_synA(1, SYN_LOC, SYN_POS)

// NetCons del NetStim a las sinapsis exc (con delay en cell 1)
for k = 0, 1 {
    dell = 0
    if (k == 1) { dell = delay }
    ncA[k] = new NetCon(ns, synA[k], 0, dell, ws)
}

// NetCons cruzados de inhibicion
for k = 0, 1 {
    m = k+1
    if (k == 1) { m = 0 }
    soma[k] nci[k] = new NetCon(&v(.5), syni[m], 0, 0, wi)
}

printf("[INFO] sinapsis exc colocada en cell0->loc=%d cell1->loc=%d pos=%g\n", \
       SYN_LOC, SYN_LOC, SYN_POS)

// ============================================================
// advance()
// ============================================================
proc advance() {
    fadvance()
    if (fv.isopen()) {
        fv.printf("%g %g %g \n", t, soma[0].v(0.5), soma[1].v(0.5))
    }
}

// ============================================================
// run_sim_clean()
// ============================================================
func run_sim_clean() { local k, min_spk, dell, first_valid, t_idx
    if (fv.isopen()) { fv.close() }
    ns.number   = 1000000
    ns.interval = 1000 / FreqInp
    ns.start    = 0
    for k = 0, 1 {
        dell = 0
        if (k == 1) { dell = delay }
        ncA[k] = new NetCon(ns, synA[k], 0, dell, ws)
    }
    for k = 0, 1 {
        m = k+1
        if (k == 1) { m = 0 }
        soma[k] nci[k] = new NetCon(&v(.5), syni[m], 0, 0, wi)
    }
    for k = 0, 1 {
        ic[k].amp = 0
        ic[k].dur = 0
    }
    tvec = new Vector()
    tvec.record(&t)
    for k = 0, 1 {
        spike_times[k] = new Vector()
        vvec[k]        = new Vector()
        soma[k] {
            vvec[k].record(&v(0.5))
            spike_rec[k] = new NetCon(&v(0.5), nullobj, 0, 0, 0)
            spike_rec[k].record(spike_times[k])
        }
    }
    finitialize(-65)
    tstop = t_therm + tstop_diag
    run()
    t_idx = tvec.indwhere(">=", t_therm)
    if (t_idx > 0) {
        tvec.remove(0, t_idx - 1)
        for k = 0, 1 { vvec[k].remove(0, t_idx - 1) }
    }
    for k = 0, 1 {
        first_valid = spike_times[k].indwhere(">=", t_therm)
        if (first_valid > 0) {
            spike_times[k].remove(0, first_valid - 1)
        } else if (first_valid < 0) {
            spike_times[k].resize(0)
        }
    }
    min_spk = spike_times[0].size()
    return min_spk
}

// ============================================================
// calc_phase()
// ============================================================
proc calc_phase() { local k, i, j, t_curr, t_prev, t_next
    for k = 0, 1 {
        phi[k] = new Vector(tvec.size())
        phi[k].fill(-1)
        for j = 0, tvec.size()-1 {
            t_curr = tvec.x[j]
            for i = 0, spike_times[k].size()-2 {
                if (t_curr >= spike_times[k].x[i] && t_curr < spike_times[k].x[i+1]) {
                    t_prev      = spike_times[k].x[i]
                    t_next      = spike_times[k].x[i+1]
                    phi[k].x[j] = 2*PI * (t_curr - t_prev) / (t_next - t_prev)
                }
            }
        }
    }
}

// ============================================================
// calc_corr(): C1
// ============================================================
func calc_corr() { local j, tin_idx, tfin_idx, sum, dt, t_range, dphi
    tin_idx  = tvec.indwhere(">=", spike_times[0].x[1])
    tfin_idx = tvec.indwhere(">=", spike_times[0].x[spike_times[0].size()-2])
    if (tin_idx  < 0) { tin_idx  = 0 }
    if (tfin_idx < 0) { tfin_idx = tvec.size()-1 }
    t_range = tvec.x[tfin_idx] - tvec.x[tin_idx]
    if (t_range <= 0) { return -9999 }
    sum = 0
    dt  = tvec.x[1] - tvec.x[0]
    for j = tin_idx, tfin_idx-1 {
        if (phi[0].x[j] >= 0 && phi[1].x[j] >= 0) {
            dphi = phi[1].x[j] - phi[0].x[j]
            sum  = sum + cos(dphi) * dt
        }
    }
    return sum / t_range
}

// ============================================================
// calc_corr_2_N(): C2N
// ============================================================
func calc_corr_2_N() { local l, tmax, ttt, ddt, cs_med, t_range
    ispk     = new Vector(N)
    tspkprec = new Vector(N)
    tspknext = new Vector(N)
    ph       = new Vector(N)
    tmax = spike_times[0].x[spike_times[0].size()-1]
    for l = 1, N-1 {
        if (spike_times[l].x[spike_times[l].size()-1] < tmax) {
            tmax = spike_times[l].x[spike_times[l].size()-1]
        }
    }
    ddt = 0.1
    for l = 0, N-1 {
        ispk.x[l]     = 0
        tspkprec.x[l] = spike_times[l].x[0]
        tspknext.x[l] = spike_times[l].x[1]
        ph.x[l]       = 0
    }
    cs_med = 0
    ttt    = tvec.x[0]
    while (ttt < tmax) {
        for l = 0, N-1 {
            if (spike_times[l].size() > 1) {
                if (ttt >= tspknext.x[l]) {
                    if (ispk.x[l] + 1 < spike_times[l].size() - 1) {
                        ispk.x[l]     = ispk.x[l] + 1
                        tspkprec.x[l] = spike_times[l].x[ispk.x[l]]
                        tspknext.x[l] = spike_times[l].x[ispk.x[l] + 1]
                    }
                }
                if (tspkprec.x[l] != tspknext.x[l] && ttt < tspknext.x[l]) {
                    ph.x[l] = 2*PI * (ttt - tspkprec.x[l]) / (tspknext.x[l] - tspkprec.x[l])
                }
            }
        }
        cs_med = cs_med + cos(ph.x[1] - ph.x[0]) * ddt
        ttt    = ttt + ddt
    }
    t_range = ttt - tvec.x[0]
    if (t_range <= 0) { return -9999 }
    return cs_med / t_range
}

// ============================================================
// calc_pearson()
// ============================================================
func calc_pearson() { local j, mean0, mean1, sum0, sum1, num, den0, den1
    sum0 = 0   sum1 = 0
    for j = 0, tvec.size()-1 {
        sum0 = sum0 + vvec[0].x[j]
        sum1 = sum1 + vvec[1].x[j]
    }
    mean0 = sum0 / tvec.size()
    mean1 = sum1 / tvec.size()
    num = 0   den0 = 0   den1 = 0
    for j = 0, tvec.size()-1 {
        num  = num  + (vvec[0].x[j]-mean0)*(vvec[1].x[j]-mean1)
        den0 = den0 + (vvec[0].x[j]-mean0)*(vvec[0].x[j]-mean0)
        den1 = den1 + (vvec[1].x[j]-mean1)*(vvec[1].x[j]-mean1)
    }
    if (den0 <= 0 || den1 <= 0) { return 0 }
    return num / sqrt(den0 * den1)
}

// ============================================================
// calc_corr_seno()
// ============================================================
func calc_corr_seno() { local j, tin_idx, tfin_idx, sum, dt, t_range, dphi
    tin_idx  = tvec.indwhere(">=", spike_times[0].x[1])
    tfin_idx = tvec.indwhere(">=", spike_times[0].x[spike_times[0].size()-2])
    if (tin_idx  < 0) { tin_idx  = 0 }
    if (tfin_idx < 0) { tfin_idx = tvec.size()-1 }
    t_range = tvec.x[tfin_idx] - tvec.x[tin_idx]
    if (t_range <= 0) { return -9999 }
    sum = 0
    dt  = tvec.x[1] - tvec.x[0]
    for j = tin_idx, tfin_idx-1 {
        if (phi[0].x[j] >= 0 && phi[1].x[j] >= 0) {
            dphi = phi[1].x[j] - phi[0].x[j]
            sum  = sum + sin(dphi) * dt
        }
    }
    return sum / t_range
}

// ============================================================
// test_ws_por_freq()
// ============================================================
proc test_ws_por_freq() { local freq_test, ws_test, spk, cval, c2val, \
                               f_out_0, f_out_1, best_ws, best_metric
    print "=== TEST ws optimo por frecuencia (BS4 NetStim dendritico) ==="
    print ""
    tstop_diag = 2000
    wi = 0
    freq_test = 40
    while (freq_test <= 70) {
        FreqInp     = freq_test
        ws_test     = 0.0005
        best_ws     = -1
        best_metric = 0
        printf("--- FreqInp = %g Hz ---\n", freq_test)
        while (ws_test <= 0.05 + 1e-8) {
            ws  = ws_test
            spk = run_sim_clean()
            f_out_0 = 0
            f_out_1 = 0
            if (spike_times[0].size() >= 2) {
                f_out_0 = (spike_times[0].size()-1) / (spike_times[0].x[spike_times[0].size()-1] - spike_times[0].x[0]) * 1000
            }
            if (spike_times[1].size() >= 2) {
                f_out_1 = (spike_times[1].size()-1) / (spike_times[1].x[spike_times[1].size()-1] - spike_times[1].x[0]) * 1000
            }
            if (spk >= 5) {
                calc_phase()
                cval  = calc_corr()
                c2val = calc_corr_2_N()
                printf("  ws=%-9g  spk0=%3d  spk1=%3d  f0=%6.2f  f1=%6.2f  C1=%6.3f  C2N=%6.3f", \
                    ws_test, spike_times[0].size(), spike_times[1].size(), f_out_0, f_out_1, cval, c2val)
                if (f_out_0 >= freq_test * 0.99) {
                    printf("  (LOCK 1:1)\n")
                } else if (f_out_0 > 0) {
                    printf("  (SKIPPING)\n")
                    if (ws_test > best_ws) {
                        best_ws     = ws_test
                        best_metric = f_out_0
                    }
                } else {
                    printf("  (??)\n")
                }
            } else {
                printf("  ws=%-9g  spk0=%3d  spk1=%3d  (sin spikes)\n", \
                    ws_test, spike_times[0].size(), spike_times[1].size())
            }
            ws_test = ws_test + 0.0005
        }
        if (best_ws > 0) {
            printf("  >>> CANDIDATO freq=%g Hz:  ws=%g  (f_out=%.2f Hz)\n", \
                freq_test, best_ws, best_metric)
        } else {
            printf("  >>> freq=%g Hz: TODO bloqueado en lock 1:1 o sin spikes\n", freq_test)
        }
        print ""
        freq_test += 10
    }
    tstop_diag = 5000
}

// ============================================================
// freq_diagram(): barrido (FreqInp, wi) -> frecuencias de salida
// ============================================================
proc freq_diagram() { local wi_val, freq_val, min_spk, \
                           f_in_0, f_in_1, f_out_0, f_out_1
   
	ws         = 0.001
	tstop_diag = 4000
	wi_min     = 0
	wi_max     = 1e-3
	wi_step    = 2e-5         // 51 wi

	// freq_diagram() — recorre amplio para ver lenguas Arnold
	freq_min  = 30
	freq_max  = 70
	freq_step = 2 

    sprint(new_file, "FreqIn_vs_FreqOut_NetStim_BS4_synLOC%d_synPOS%g_ws%g_delay%g_therm%d.txt", \
           SYN_LOC, SYN_POS, ws, delay, t_therm)
    corr_out = new File()
    corr_out.wopen(new_file)
    corr_out.printf("# BallStick4 NetStim dendritico  SYN_LOC=%d SYN_POS=%g  ws=%.4g  delay=%.4g  t_therm=%d\n", \
                    SYN_LOC, SYN_POS, ws, delay, t_therm)
    corr_out.printf("# Columnas: FreqInp[Hz]  f_in_0[Hz]  f_in_1[Hz]  wi  f_out_0[Hz]  f_out_1[Hz]\n")
    print "Guardando en: ", new_file

    freq_val = freq_min
    while (freq_val <= freq_max + freq_step/2) {
        FreqInp = freq_val
        wi = 0
        min_spk = run_sim_clean()
        f_in_0 = 0
        f_in_1 = 0
        if (spike_times[0].size() >= 2) {
            f_in_0 = (spike_times[0].size()-1) / (spike_times[0].x[spike_times[0].size()-1] - spike_times[0].x[0]) * 1000
        }
        if (spike_times[1].size() >= 2) {
            f_in_1 = (spike_times[1].size()-1) / (spike_times[1].x[spike_times[1].size()-1] - spike_times[1].x[0]) * 1000
        }
        print "FreqInp=", freq_val, " Hz   f_in_0=", f_in_0, " Hz   f_in_1=", f_in_1, " Hz"
        wi_val = wi_min
        while (wi_val <= wi_max + wi_step/2) {
            wi = wi_val
            min_spk = run_sim_clean()
            f_out_0 = 0
            f_out_1 = 0
            if (spike_times[0].size() >= 2) {
                f_out_0 = (spike_times[0].size()-1) / (spike_times[0].x[spike_times[0].size()-1] - spike_times[0].x[0]) * 1000
            }
            if (spike_times[1].size() >= 2) {
                f_out_1 = (spike_times[1].size()-1) / (spike_times[1].x[spike_times[1].size()-1] - spike_times[1].x[0]) * 1000
            }
            print "  wi=", wi_val, "  f_out_0=", f_out_0, "  f_out_1=", f_out_1
            corr_out.printf("%.6g %.6g %.6g %.6g %.6g %.6g\n", \
                freq_val, f_in_0, f_in_1, wi_val, f_out_0, f_out_1)
            wi_val += wi_step
        }
        corr_out.printf("\n")
        corr_out.flush()
        freq_val += freq_step
    }
    corr_out.close()
    printf("Guardado en %s\n", new_file)
}

// ============================================================
// phase_diagram_compare()
// ============================================================
proc phase_diagram_compare() { local wi_val, freq_val, k, n, min_spk, \
    csum1, csum2, csum3, csum4, \
    csum1_sq, csum2_sq, csum3_sq, csum4_sq, \
    cval1, cval2, cval3, cval4, \
    sigma1, sigma2, sigma3, sigma4, \
    Nexp_actual, cv, c2, cp, cs
	ws = 0.001
    freq_min  = 40
	freq_max  = 60
	freq_step = 1
    wi_min    = 0
    wi_max    = 1e-3
    wi_step   = 2e-5
    tstop_diag = 4000
    Nexp       = 1

    sprint(new_file, "Correlacion_BS4_NetStim_freq_vs_wi_synLOC%d_synPOS%g_ws%g_delay%g_Termalizacion_%d.txt", \
           SYN_LOC, SYN_POS, ws, delay, t_therm)
    corr_out = new File()
    corr_out.wopen(new_file)
    corr_out.printf("# BallStick4 NetStim dendritico  SYN_LOC=%d SYN_POS=%g  ws=%.4g  delay=%.4g  t_therm=%d\n", \
                    SYN_LOC, SYN_POS, ws, delay, t_therm)
    corr_out.printf("# Col: freq  wi  C1  sC1  C2N  sC2N  Pearson  sPearson  Cseno  sCseno\n")
    print "Guardando en: ", new_file
    print "ws fijo = ", ws

    freq_val = freq_min
    while (freq_val <= freq_max + freq_step/2) {
        FreqInp = freq_val
        print ">>> FreqInp =", freq_val, "Hz"
        wi_val = wi_min
        while (wi_val <= wi_max + wi_step/2) {
            wi = wi_val
            min_spk = run_sim_clean()
            print "  wi=", wi_val, " spikes0=", spike_times[0].size(), " spikes1=", spike_times[1].size()
            cval1=0  cval2=0  cval3=0  cval4=0
            sigma1=0  sigma2=0  sigma3=0  sigma4=0
            Nexp_actual = 0
            if (min_spk >= 5) {
                csum1=0  csum2=0  csum3=0  csum4=0
                csum1_sq=0  csum2_sq=0  csum3_sq=0  csum4_sq=0
                for n = 1, Nexp {
                    min_spk = run_sim_clean()
                    if (min_spk >= 5) {
                        c2 = calc_corr_2_N()
                        calc_phase()
                        cv = calc_corr()
                        csum1 += cv   csum1_sq += cv*cv
                        csum2 += c2   csum2_sq += c2*c2
                        Nexp_actual += 1
                    }
                }
                if (Nexp_actual > 0) {
                    cval1 = csum1/Nexp_actual
                    cval2 = csum2/Nexp_actual
                    if (Nexp_actual > 1) {
                        sigma1 = sqrt((csum1_sq/Nexp_actual - cval1*cval1)*Nexp_actual/(Nexp_actual-1))
                        sigma2 = sqrt((csum2_sq/Nexp_actual - cval2*cval2)*Nexp_actual/(Nexp_actual-1))
                    }
                    print "  -> C1 = ", cval1, " C2N = ", cval2
                }
            } else {
                print "  SIN SPIKES: freq=", freq_val, " wi=", wi_val
            }
            corr_out.printf("%.6g\t%.6g\t%.6g\t%.6g\t%.6g\t%.6g\t%.6g\t%.6g\t%.6g\t%.6g\n", \
                freq_val, wi_val, \
                cval1, sigma1, cval2, sigma2, \
                cval3, sigma3, cval4, sigma4)
            wi_val += wi_step
        }
        corr_out.printf("\n")
        freq_val += freq_step
    }
    corr_out.close()
    printf("Guardado en %s\n", new_file)
}
// ============================================================
// snippet_barrido_synpos_NetStim.hoc
// ------------------------------------------------------------
// PEGAR al final de:
//   2cells_NetStim_BallStick4_naxkdr_dend.hoc  (BS4 dendritico)
//   2cells_NetStim_Arbol_naxkdr.hoc            (TreeDend/Arbol)
//
// Requiere que el fichero HOC anfitrion ya haya definido:
//   - SYN_LOC, SYN_POS (variables globales)
//   - make_synA(cell, loc, pos)  (crea la sinapsis exc)
//   - run_sim_clean(), calc_phase(), calc_corr_2_N(),
//     calc_corr(), calc_pearson(), calc_corr_seno()
//   - Objetos: synA[], ns, corr_out, spike_times[]
//
// Contiene dos procedures independientes:
//   1) barrido_synpos_freq()        -> f_in vs f_out para cada SYN_POS
//   2) barrido_synpos_correlacion() -> <C> para cada SYN_POS
//
// Al final del script anfitrion descomenta el que quieras lanzar.
// ============================================================

// NetCons locales para el barrido (evita conflicto con ncA del
// fichero anfitrion, que en algunos HOCs no esta declarado como array)
objref ncA_bar[2]

// ============================================================
// barrido_synpos_freq()
//   Para cada SYN_POS del barrido:
//     - Recrea las sinapsis en la nueva posicion
//     - Barre (FreqInp, wi) y guarda f_in y f_out por soma
//
// Fichero de salida: uno por cada SYN_POS.
//   Columnas: FreqInp[Hz] f_in_0[Hz] f_in_1[Hz] wi f_out_0[Hz] f_out_1[Hz]
// ============================================================
proc barrido_synpos_freq() { local pos_val, wi_val, freq_val, k, min_spk, \
                                   f_in_0, f_in_1, f_out_0, f_out_1, dell
    // ---- rangos de barrido ----
    pos_min   = 0.1        // desde base de la dendrita
    pos_max   = 0.9        // hasta cerca de la punta
    pos_step  = 0.2        // 5 posiciones: 0.1, 0.3, 0.5, 0.7, 0.9
    freq_min  = 30
    freq_max  = 70
    freq_step = 2          // 21 freqs
    wi_min    = 0
    wi_max    = 1e-3
    wi_step   = 5e-5       // 21 wi
    tstop_diag = 4000
    // ---- fin rangos ----

    pos_val = pos_min
    while (pos_val <= pos_max + pos_step/2) {
        SYN_POS = pos_val
        // Recrear las sinapsis exc en la nueva posicion
        make_synA(0, SYN_LOC, SYN_POS)
        make_synA(1, SYN_LOC, SYN_POS)
        // Reconectar los NetCons del NetStim a las nuevas sinapsis
        for k = 0, 1 {
            dell = 0
            if (k == 1) { dell = delay }
            ncA_bar[k] = new NetCon(ns, synA[k], 0, dell, ws)
        }
        printf("\n[BARRIDO_SYNPOS_FREQ] ==> SYN_POS = %g\n", SYN_POS)

        // Fichero: incluye SYN_POS en el nombre para no pisar
        sprint(new_file, \
          "FreqIn_vs_FreqOut_NetStim_BarridoSYNPOS_synLOC%d_synPOS%g_ws%g_delay%g_therm%d.txt", \
          SYN_LOC, SYN_POS, ws, delay, t_therm)
        corr_out = new File()
        corr_out.wopen(new_file)
        corr_out.printf("# NetStim BarridoSYNPOS  SYN_LOC=%d SYN_POS=%g  ws=%.4g  delay=%.4g  t_therm=%d\n", \
                        SYN_LOC, SYN_POS, ws, delay, t_therm)
        corr_out.printf("# Columnas: FreqInp[Hz]  f_in_0[Hz]  f_in_1[Hz]  wi  f_out_0[Hz]  f_out_1[Hz]\n")
        print "Guardando en: ", new_file

        freq_val = freq_min
        while (freq_val <= freq_max + freq_step/2) {
            FreqInp = freq_val

            // Paso 1: frecuencias naturales sin inhibicion (wi=0)
            wi = 0
            min_spk = run_sim_clean()
            f_in_0 = 0
            f_in_1 = 0
            if (spike_times[0].size() >= 2) {
                f_in_0 = (spike_times[0].size()-1) \
                       / (spike_times[0].x[spike_times[0].size()-1] \
                          - spike_times[0].x[0]) * 1000
            }
            if (spike_times[1].size() >= 2) {
                f_in_1 = (spike_times[1].size()-1) \
                       / (spike_times[1].x[spike_times[1].size()-1] \
                          - spike_times[1].x[0]) * 1000
            }
            print "  SYN_POS=", SYN_POS, " FreqInp=", freq_val, \
                  " f_in_0=", f_in_0, " f_in_1=", f_in_1

            // Paso 2: barrido en wi
            wi_val = wi_min
            while (wi_val <= wi_max + wi_step/2) {
                wi = wi_val
                min_spk = run_sim_clean()
                f_out_0 = 0
                f_out_1 = 0
                if (spike_times[0].size() >= 2) {
                    f_out_0 = (spike_times[0].size()-1) \
                            / (spike_times[0].x[spike_times[0].size()-1] \
                               - spike_times[0].x[0]) * 1000
                }
                if (spike_times[1].size() >= 2) {
                    f_out_1 = (spike_times[1].size()-1) \
                            / (spike_times[1].x[spike_times[1].size()-1] \
                               - spike_times[1].x[0]) * 1000
                }
                corr_out.printf("%.6g %.6g %.6g %.6g %.6g %.6g\n", \
                    freq_val, f_in_0, f_in_1, wi_val, f_out_0, f_out_1)
                wi_val = wi_val + wi_step
            }
            corr_out.printf("\n")
            corr_out.flush()
            freq_val = freq_val + freq_step
        }
        corr_out.close()
        printf("[ok] Guardado %s\n", new_file)
        pos_val = pos_val + pos_step
    }
    printf("\n[BARRIDO_SYNPOS_FREQ] TERMINADO.\n")
}


// ============================================================
// barrido_synpos_correlacion()
//   Para cada SYN_POS del barrido:
//     - Recrea las sinapsis en la nueva posicion
//     - Barre (FreqInp, wi) y guarda C1, C2N, Pearson, Cseno
//
// Fichero de salida: uno por cada SYN_POS.
//   Columnas: freq  wi  C1  C2N  Pearson  Cseno
// ============================================================
proc barrido_synpos_correlacion() { local pos_val, wi_val, freq_val, k, n, min_spk, \
    csum1, csum2, csum3, csum4, \
    cval1, cval2, cval3, cval4, \
    Nexp_actual, cv, c2, cp, cs, dell
    // ---- rangos de barrido ----
    pos_min   = 0.1
    pos_max   = 0.9
    pos_step  = 0.2        // 5 posiciones
    freq_min  = 40
    freq_max  = 60
    freq_step = 2          // 11 freqs (rango en torno a la resonancia)
    wi_min    = 0
    wi_max    = 1e-3
    wi_step   = 5e-5       // 21 wi
    tstop_diag = 4000
    Nexp       = 1
    // ---- fin rangos ----

    pos_val = pos_min
    while (pos_val <= pos_max + pos_step/2) {
        SYN_POS = pos_val
        make_synA(0, SYN_LOC, SYN_POS)
        make_synA(1, SYN_LOC, SYN_POS)
        for k = 0, 1 {
            dell = 0
            if (k == 1) { dell = delay }
            ncA_bar[k] = new NetCon(ns, synA[k], 0, dell, ws)
        }
        printf("\n[BARRIDO_SYNPOS_CORR] ==> SYN_POS = %g\n", SYN_POS)

        sprint(new_file, \
          "Correlacion_BarridoSYNPOS_NetStim_freq_vs_wi_synLOC%d_synPOS%g_ws%g_delay%g_therm%d.txt", \
          SYN_LOC, SYN_POS, ws, delay, t_therm)
        corr_out = new File()
        corr_out.wopen(new_file)
        corr_out.printf("# NetStim BarridoSYNPOS  SYN_LOC=%d SYN_POS=%g  ws=%.4g  delay=%.4g  t_therm=%d\n", \
                        SYN_LOC, SYN_POS, ws, delay, t_therm)
        corr_out.printf("# Col: freq  wi  C1  C2N  Pearson  Cseno\n")
        print "Guardando en: ", new_file

        freq_val = freq_min
        while (freq_val <= freq_max + freq_step/2) {
            FreqInp = freq_val
            print ">>> SYN_POS=", SYN_POS, " FreqInp=", freq_val
            wi_val = wi_min
            while (wi_val <= wi_max + wi_step/2) {
                wi = wi_val
                min_spk = run_sim_clean()
                cval1=0  cval2=0  cval3=0  cval4=0
                Nexp_actual = 0
                if (min_spk >= 5) {
                    csum1=0  csum2=0  csum3=0  csum4=0
                    for n = 1, Nexp {
                        min_spk = run_sim_clean()
                        if (min_spk >= 5) {
                            c2 = calc_corr_2_N()
                            calc_phase()
                            cv = calc_corr()
                            cp = calc_pearson()
                            cs = calc_corr_seno()
                            csum1 = csum1 + cv
                            csum2 = csum2 + c2
                            csum3 = csum3 + cp
                            csum4 = csum4 + cs
                            Nexp_actual = Nexp_actual + 1
                        }
                    }
                    if (Nexp_actual > 0) {
                        cval1 = csum1 / Nexp_actual
                        cval2 = csum2 / Nexp_actual
                        cval3 = csum3 / Nexp_actual
                        cval4 = csum4 / Nexp_actual
                    }
                }
                corr_out.printf("%.6g %.6g %.6g %.6g %.6g %.6g\n", \
                    freq_val, wi_val, cval1, cval2, cval3, cval4)
                wi_val = wi_val + wi_step
            }
            corr_out.printf("\n")
            corr_out.flush()
            freq_val = freq_val + freq_step
        }
        corr_out.close()
        printf("[ok] Guardado %s\n", new_file)
        pos_val = pos_val + pos_step
    }
    printf("\n[BARRIDO_SYNPOS_CORR] TERMINADO.\n")
}


// ============================================================
// COMO LANZAR (descomenta al final del .hoc anfitrion, DESPUES
// de la seccion "PASADA INICIAL Y BARRIDO"):
//
//   barrido_synpos_freq()          // f_in / f_out por SYN_POS
//   barrido_synpos_correlacion()   // <C> por SYN_POS
//
// TIEMPOS ESTIMADOS con los defaults:
//   barrido_synpos_freq()        : 5 pos * 21 freq * 21 wi = 2205 sims
//                                  ~= 2 h con tstop_diag=4000
//   barrido_synpos_correlacion() : 5 pos * 11 freq * 21 wi = 1155 sims
//                                  ~= 1 h con tstop_diag=4000
//
// AJUSTES RAPIDOS (si te urge o quieres mas resolucion):
//   - reduce pos_step -> mas posiciones
//   - reduce freq_step -> mas frecuencias
//   - reduce wi_step  -> mas resolucion en la transicion
//   - reduce tstop_diag a 2000 -> mitad de tiempo
//
// SALIDA:
//   Un fichero .txt por cada SYN_POS con el nombre de patron:
//     Correlacion_BarridoSYNPOS_NetStim_freq_vs_wi_synLOCX_synPOSY.txt
//     FreqIn_vs_FreqOut_NetStim_BarridoSYNPOS_synLOCX_synPOSY.txt
//   donde X es SYN_LOC y Y es el valor de SYN_POS.
// ============================================================
// ============================================================
// PASADA INICIAL Y BARRIDO
// ============================================================
tvec = new Vector()
tvec.record(&t)
for k = 0, 1 {
    vvec[k] = new Vector()
    soma[k] vvec[k].record(&v(0.5))
}
sprint(new_file, "Trayectorias_BS4dend_synLOC%d_freq_%d_wi_%g.txt", SYN_LOC, FreqInp, wi)
fv = new File()
fv.wopen(new_file)
fv.printf("# t    soma[0].v, soma[1].v  \n")
ns.start = 0
tstop = t_therm + 1000
run()
fv.close()
tstop_diag = 5000

// --- descomenta el que quieras lanzar ---
//barrido_synpos_correlacion()
barrido_synpos_freq()
//phase_diagram_compare()
//test_ws_por_freq()
freq_diagram()